// Shared helper functions for the workflows in this repository: the ONLY place to edit them.
// tools/build.py copies the functions each macro uses to the end of that macro, so every macro stays one
// self-contained file. After editing this file, run:  python3 tools/build.py

// Reads series and channel metadata through Bio-Formats (OME model) inside try/catch, or a single 'E<tab>error'
// line for an unreadable file. One tab-separated line per series and per channel:
//   S  series  name  sizeX  sizeZ  sizeC  pixel_um  zstep_um  NA  refractive_index  sizeT  readable(1/0)  rgb_channels  immersion
//   C  series  channel  name (display colour and excitation, e.g. "CH2 (green 488 nm)")  excitation_nm  emission_nm
// Unknown numbers are -1.
function readMetadata(path) {
    p = jsText(path);
    js = "importClass(Packages.loci.formats.ImageReader); importClass(Packages.loci.formats.MetadataTools);"
       + "var U = Packages.ome.units.UNITS;"
       + "function len(q, u) { return q == null ? -1 : q.value(u).doubleValue(); }"
       + "function tryget(f) { try { return f(); } catch (e) { return null; } }"
       + "var r = new ImageReader(); var m = MetadataTools.createOMEXMLMetadata(); r.setMetadataStore(m); var out = [];"
       + "try { r.setId('" + p + "');"
       + "for (var s = 0; s < r.getSeriesCount(); s++) { r.setSeries(s);"
       + "  var ok = 1; try { r.openBytes(r.getImageCount() - 1); } catch (e) { ok = 0; }"
       + "  var nm = tryget(function () { return m.getImageName(s); }); if (nm == null) nm = 'Series' + (s + 1);"
       + "  var id = tryget(function () { return m.getObjectiveSettingsID(s); }); var na = -1, imm = '';"
       + "  for (var i = 0; i < m.getInstrumentCount(); i++) for (var o = 0; o < m.getObjectiveCount(i); o++) {"
       + "    var v = tryget(function () { return m.getObjectiveLensNA(i, o); });"
       + "    var match = id != null && String(m.getObjectiveID(i, o)) == String(id);"
       + "    if (v != null && (na < 0 || match)) { na = v; var im = tryget(function () { return m.getObjectiveImmersion(i, o); }); imm = im == null ? '' : String(im); } }"
       + "  var ri = tryget(function () { return m.getObjectiveSettingsRefractiveIndex(s); }); if (ri == null) ri = -1;"
       + "  out.push(['S', s, String(nm).replace(/[\\t\\n]/g, ' '), r.getSizeX(), r.getSizeZ(), r.getSizeC(),"
       + "    len(tryget(function () { return m.getPixelsPhysicalSizeX(s); }), U.MICROMETER),"
       + "    len(tryget(function () { return m.getPixelsPhysicalSizeZ(s); }), U.MICROMETER), na, ri, r.getSizeT(), ok, r.getRGBChannelCount(), imm].join('\\t'));"
       + "  for (var c = 0; c < r.getSizeC(); c++) {"
       + "    var cn = tryget(function () { return m.getChannelName(s, c); }); cn = cn == null ? 'C' + (c + 1) : String(cn).replace(/[\\t\\n,]/g, ' ');"
       + "    var col = tryget(function () { return m.getChannelColor(s, c); }), cname = '';"
       + "    if (col != null) { var R = col.getRed() > 100, G = col.getGreen() > 100, B = col.getBlue() > 100;"
       + "      cname = R && G && B ? 'grey' : R && G ? 'yellow' : R && B ? 'magenta' : G && B ? 'cyan' : R ? 'red' : G ? 'green' : B ? 'blue' : ''; }"
       + "    var ex = len(tryget(function () { return m.getChannelExcitationWavelength(s, c); }), U.NANOMETER);"
       + "    var em = len(tryget(function () { return m.getChannelEmissionWavelength(s, c); }), U.NANOMETER);"
       + "    var tag = []; if (cname != '') tag.push(cname); if (ex > 0) tag.push(Math.round(ex) + ' nm');"
       + "    if (tag.length > 0) cn = cn + ' (' + tag.join(' ') + ')';"
       + "    out.push(['C', s, c, cn, ex, em].join('\\t')); } }"
       + "} catch (e) { out = ['E\\t' + String(e).replace(/[\\t\\n]/g, ' ')]; }"
       + "try { r.close(); } catch (e) {} out.join('\\n');";
    return eval("js", js);
}

// text as the inside of a JavaScript '...' string: every backslash and quote escaped one by one (macro replace()
// treats a one-character pattern literally, so a regular-expression escape doubles the backslash).
function jsText(s) {
    out = "";
    for (i = 0; i < lengthOf(s); i++) { c = substring(s, i, i + 1); if (c == "\\" || c == "'") out = out + "\\"; out = out + c; }
    return out;
}

// Files Bio-Formats opens as microscope data (subfolders and hidden files skipped).
function isMicroscopeFile(name) {
    n = toLowerCase(name);
    if (endsWith(n, "/") || startsWith(n, ".")) return false;
    ext = newArray(".oir", ".oib", ".oif", ".czi", ".lsm", ".lif", ".lof", ".nd2", ".ims", ".vsi", ".zvi", ".dv", ".ics", ".tif", ".tiff");
    for (i = 0; i < ext.length; i++) if (endsWith(n, ext[i])) return true;
    return false;
}

// The readable part of a Java error: no exception class name, no file path.
function shortError(e, path) {
    e = replace(e, "^.*Exception: ", "");
    if (endsWith(e, File.getName(path)) && lastIndexOf(e, ": ") > 0) e = substring(e, 0, lastIndexOf(e, ": "));
    return e;
}

// Opens series s (0-based) as a hyperstack through Bio-Formats' API inside try/catch; returns "" or the error.
function openSeries(path, s) {
    p = jsText(path);
    js = "var I = Packages.loci.plugins['in'].ImporterOptions; var o = new I(); o.setId('" + p + "');"
       + "o.setColorMode(I.COLOR_MODE_DEFAULT); o.setStackOrder(I.ORDER_XYCZT); o.setQuiet(true); o.setOpenAllSeries(false);"
       + "o.setSeriesOn(0, false); o.setSeriesOn(" + s + ", true);"
       + "var err = ''; try { Packages.loci.plugins.BF.openImagePlus(o)[0].show(); } catch (e) { err = String(e); } err;";
    return eval("js", js);
}

function sameFolder(a, b) {
    a = replace(a, "\\\\", "/"); b = replace(b, "\\\\", "/");
    if (!endsWith(a, "/")) a = a + "/";
    if (!endsWith(b, "/")) b = b + "/";
    if (startsWith(getInfo("os.name"), "Windows")) { a = toLowerCase(a); b = toLowerCase(b); }
    if (a == b) return true;
    return false;
}

function sanitize(name) {
    return replace(name, "[^a-zA-Z0-9._-]", "_");
}

// Indices of the series to measure in a file (full-size, not time-lapse, readable); -1 = unreadable file,
// -2 = series excluded (pyramid level / time-lapse / unreadable plane).
function usableSeries(path) {
    lines = split(readMetadata(path), "\n");
    if (startsWith(lines[0], "E")) { bad = newArray(1); bad[0] = -1; return bad; }
    sx = newArray(); st = newArray(); sok = newArray();
    for (i = 0; i < lines.length; i++) {
        f = split(lines[i], "\t");
        if (f[0] != "S") continue;
        k = parseInt(f[1]); sx[k] = parseInt(f[3]); st[k] = parseInt(f[10]); sok[k] = parseInt(f[11]);
    }
    maxX = 0;
    for (k = 0; k < sx.length; k++) maxX = maxOf(maxX, sx[k]);
    out = newArray();
    for (k = 0; k < sx.length; k++) {
        if (sx[k] < maxX / 2) out = Array.concat(out, -2);          // thumbnail / overview: skipped silently
        else if (st[k] > 1) out = Array.concat(out, -3);           // time-lapse
        else if (sok[k] == 0) out = Array.concat(out, -4);         // a plane could not be read
        else out = Array.concat(out, k);
    }
    return out;
}

// "Not processed" line for a series code from usableSeries (k = its position in the list); "" for thumbnails.
function seriesProblem(path, s, k) {
    n = File.getName(path);
    if (s == -1) return n + " is damaged (could not be read)\n";
    if (s == -3) return n + " series " + (k + 1) + " is a time-lapse (not supported): skipped\n";
    if (s == -4) return n + " series " + (k + 1) + " has a plane that could not be read: skipped\n";
    return "";
}

function uniqueOf(a) {
    out = newArray();
    for (i = 0; i < a.length; i++) {
        seen = false;
        for (j = 0; j < out.length; j++) if (out[j] == a[i]) seen = true;
        if (!seen) out = Array.concat(out, a[i]);
    }
    return out;
}

function medianOf(a) {
    b = Array.copy(a); Array.sort(b);
    n = b.length;
    if (n % 2 == 1) return b[floor(n / 2)];
    return (b[n / 2 - 1] + b[n / 2]) / 2;
}

// Microscope files in dir and in its subfolders (one level; the subfolder name is the replicate): "rep<tab>path".
// Output folders of these workflows (deconvolved, qc, figures) are not replicates and are skipped.
function collect(dir) {
    out = newArray();
    list = getFileList(dir); Array.sort(list);
    for (i = 0; i < list.length; i++) {
        lower = toLowerCase(list[i]);
        if (lower == "deconvolved/" || lower == "qc/" || lower == "figures/") continue;
        if (endsWith(list[i], "/")) {
            rep = substring(list[i], 0, lengthOf(list[i]) - 1);
            inner = getFileList(dir + list[i]); Array.sort(inner);
            for (j = 0; j < inner.length; j++) if (isMicroscopeFile(inner[j])) out = Array.concat(out, rep + "\t" + dir + list[i] + inner[j]);
        } else if (isMicroscopeFile(list[i])) out = Array.concat(out, "-\t" + dir + list[i]);
    }
    return out;
}

function folderName(dir) {
    d = replace(dir, "\\\\", "/");
    if (endsWith(d, "/")) d = substring(d, 0, lengthOf(d) - 1);
    return File.getName(d);
}

function countOf(a, x) {
    n = 0;
    for (i = 0; i < a.length; i++) if (a[i] == x) n++;
    return n;
}

// Number of real replicate subfolders (not "-") among the measured images of condition c.
function repCount(iRep, iCond, c) {
    reps = newArray();
    for (i = 0; i < iCond.length; i++) if (iCond[i] == c) { if (iRep[i] != "-") reps = Array.concat(reps, iRep[i]); }
    reps = uniqueOf(reps);
    return reps.length;
}

// The statistical units of condition c: replicate means (useReps) or image values; NaN skipped.
function unitValues(v, iCond, iRep, c, useReps) {
    out = newArray();
    if (!useReps) {
        for (i = 0; i < v.length; i++) if (iCond[i] == c) { if (!isNaN(v[i])) out = Array.concat(out, v[i]); }
        return out;
    }
    reps = newArray();
    for (i = 0; i < v.length; i++) if (iCond[i] == c) reps = Array.concat(reps, iRep[i]);
    reps = uniqueOf(reps);
    for (r = 0; r < reps.length; r++) {
        sum = 0; n = 0;
        for (i = 0; i < v.length; i++) if (iCond[i] == c) { if (iRep[i] == reps[r] && !isNaN(v[i])) { sum += v[i]; n++; } }
        if (n > 0) out = Array.concat(out, sum / n);
    }
    return out;
}

// Mean of v over the images of condition c and replicate rep (NaN skipped).
function repMean(v, iCond, iRep, c, rep) {
    sum = 0; n = 0;
    for (i = 0; i < v.length; i++) if (iCond[i] == c) { if (iRep[i] == rep && !isNaN(v[i])) { sum += v[i]; n++; } }
    if (n == 0) return NaN;
    return sum / n;
}

// Scores threshold T on one background-subtracted image's histogram (bins off .. off+nb-1 of hv/hc).
// Background noise is symmetric around 0, so the pixels below -T estimate the noise pixels above +T.
//   noise  = (pixels <= -T) / (pixels >= T)              share of the positive pixels that are noise
//   signal = (sum of x >= T + sum of x <= -T) / sum of x  share of the net signal kept (noise sums to ~0)
//   score  = signal * (1 - noise)
// Returns [score, % positive area, signal, noise].
function scoreThreshold(hv, hc, off, nb, T) {
    N = 0; tot = 0; nF = 0; nN = 0; cap = 0;
    half = (hv[off + 1] - hv[off]) / 2;
    for (i = off; i < off + nb; i++) {
        x = hv[i] + half; c = hc[i];
        N += c; tot += c * x;
        if (x >= T) { nF += c; cap += c * x; }
        if (x <= -T) { nN += c; cap += c * x; }
    }
    if (T <= 0 || nF == 0 || tot <= 0) return newArray(0, 100 * nF / N, 0, 1);
    noise = minOf(1, nN / nF);
    signal = minOf(1, maxOf(0, cap / tot));
    return newArray(signal * (1 - noise), 100 * nF / N, signal, noise);
}

// Live threshold window for the image "preview" (titled title): the yellow outlines follows the typed value, the slider and the
// method list. Returns "value<tab>index of the chosen method<tab>1 if the value was edited, else 0" (an unedited
// value is the method's exact threshold, not the rounded one the field shows), "cancel", or "ERR ...".
function thresholdDialog(title, msg, labels, vals, maxV) {
    l = ""; v = "";
    for (i = 0; i < labels.length; i++) { l = l + replace(labels[i], "['|]", "") + "|"; v = v + d2s(vals[i], 9) + ","; }
    msg = replace(msg, "'", ""); title = replace(title, "'", "");
    msg = replace(msg, "\n", "\\n");
    js = "try { var imp = Packages.ij.WindowManager.getImage('preview'); var L = '" + l + "'.split('|'); L.pop(); var vals = [" + v + "];"
       + "var gd = new Packages.ij.gui.NonBlockingGenericDialog('" + title + "');"
       + "gd.addMessage('" + msg + "');"
       + "gd.addChoice('Method', L, L[0]);"
       + "gd.addSlider('Threshold', 0, " + maxV + ", vals[0], " + (maxV / 1000) + ");"
       + "var cur = vals[0], last = imp.getCurrentSlice();"
       + "function show(t) { cur = t; var ip = imp.getProcessor(); ip.setThreshold(t, 1e30, Packages.ij.process.ImageProcessor.NO_LUT_UPDATE);"
       + "  var roi = new Packages.ij.plugin.filter.ThresholdToSelection().convert(ip); ip.resetThreshold(); var ov = new Packages.ij.gui.Overlay();"
       + "  if (roi != null) { roi.setStrokeColor(java.awt.Color.YELLOW); ov.add(roi); } imp.setOverlay(ov); }"
       + "var lis = new Packages.ij.ImageListener({ imageOpened: function (i) {}, imageClosed: function (i) {},"
       + "  imageUpdated: function (i) { if (i == imp && imp.getCurrentSlice() != last) { last = imp.getCurrentSlice(); show(cur); } } });"
       + "Packages.ij.ImagePlus.addImageListener(lis); show(vals[0]);"
       + "gd.addDialogListener(new Packages.ij.gui.DialogListener({ dialogItemChanged: function (g, e) {"
       + "  var ch = g.getChoices().get(0); var tf = g.getNumericFields().get(0);"
       + "  if (e != null && e.getSource() == ch) tf.setText(String(vals[ch.getSelectedIndex()]));"
       + "  var t = parseFloat(tf.getText()); if (!isNaN(t)) show(t); return true; } }));"
       + "var w = imp.getWindow(); var ss = java.awt.Toolkit.getDefaultToolkit().getScreenSize(); var sw = ss.width, sh = ss.height;"
       + "if (w != null) { var z = Math.min(1, Math.min(0.55 * sw / imp.getWidth(), 0.8 * sh / imp.getHeight()));"
       + "  var cv = imp.getCanvas(); var guard = 0; while (cv.getMagnification() > z + 1e-6 && guard++ < 20) cv.zoomOut(Math.floor(imp.getWidth() / 2), Math.floor(imp.getHeight() / 2));"
       + "  w = imp.getWindow(); w.setLocation(0, 0); gd.pack(); gd.centerDialog(false); gd.setLocation(Math.max(0, Math.min(w.getWidth() + 10, sw - gd.getWidth())), 0); }"
       + "gd.showDialog(); var out = 'cancel';"
       + "if (!gd.wasCanceled()) { var k = gd.getNextChoiceIndex(), t = gd.getNextNumber();"
       + "  var edited = Math.abs(t - vals[k]) > " + (maxV / 1000) + ";"   // the field shows a rounded value: within a step = unchanged
       + "  out = (edited ? t : vals[k]) + '\\t' + k + '\\t' + (edited ? 1 : 0); }"
       + "Packages.ij.ImagePlus.removeImageListener(lis); imp.setOverlay(null); out; } catch (e) { 'ERR ' + e; }";
    return eval("js", js);
}

// Bar graph (mean, SD error bars, one dot per statistical unit) of the conditions, saved as a PNG; returns its path.
function barGraph(title, names, means, sds, px, py, unitName, file) {
    hi = 0; lo = 0;
    for (i = 0; i < py.length; i++) { hi = maxOf(hi, py[i]); lo = minOf(lo, py[i]); }
    e = newArray(sds.length);
    for (i = 0; i < sds.length; i++) { e[i] = sds[i]; if (isNaN(e[i])) e[i] = 0; hi = maxOf(hi, means[i] + e[i]); }
    n = names.length;
    Plot.create("bar_" + title, "{" + String.join(names, ",") + "}", title);
    Plot.setLimits(-0.6, n - 0.4, lo * 1.15, hi * 1.15);
    Plot.setFrameSize(maxOf(260, 110 * n), 260);
    Plot.setColor("#12294A", "#9DB4D6");
    Plot.add("separated bar", Array.getSequence(n), means);
    Plot.setColor("black");
    Plot.add("error bars", e);
    Plot.setColor("#E2552D", "#E2552D");
    Plot.add("circle", px, py);
    Plot.setColor("black");
    Plot.addText("mean +/- SD; dots = " + unitName, 0.02, 0.06);
    Plot.show();
    saveAs("PNG", file);
    close();
    return file;
}

// Writes tab-separated tables as the sheets of an .xlsx workbook (numbers as numbers, header row frozen).
// Returns "" or the error.
function writeXlsx(path, names, contents) {
    tmp = getDirectory("temp");
    files = "";
    for (i = 0; i < names.length; i++) {
        f = tmp + "sheet" + i + ".tsv";
        File.saveString(contents[i], f);
        files = files + jsText(f) + "|";
        names[i] = replace(names[i], "[|'\\[\\]:*?/\\\\]", " ");
    }
    p = jsText(path);
    js = "try { var Z = java.util.zip; var out = new Z.ZipOutputStream(new java.io.FileOutputStream('" + p + "'));"
       + "function put(n, t) { out.putNextEntry(new Z.ZipEntry(n)); var b = new java.lang.String(t).getBytes('UTF-8'); out.write(b, 0, b.length); out.closeEntry(); }"
       + "function esc(s) { return s.replace(/&/g, '&amp;').replace(/</g, '&lt;').replace(/>/g, '&gt;').replace(/\"/g, '&quot;'); }"
       + "function col(i) { var s = ''; i++; while (i > 0) { var m = (i - 1) % 26; s = String.fromCharCode(65 + m) + s; i = Math.floor((i - 1) / 26); } return s; }"
       + "var names = '" + String.join(names, "|") + "'.split('|'); var files = '" + files + "'.split('|');"
       + "var NS = 'http://schemas.openxmlformats.org/'; var ct = '', wb = '', rel = '';"
       + "for (var s = 0; s < names.length; s++) {"
       + "  var lines = java.nio.file.Files.readAllLines(java.nio.file.Paths.get(files[s]), java.nio.charset.StandardCharsets.UTF_8); var rows = [];"
       + "  for (var r = 0; r < lines.size(); r++) { var f = String(lines.get(r)).split('\\t'); var cells = [];"
       + "    for (var c = 0; c < f.length; c++) { var x = f[c], ref = col(c) + (r + 1);"
       + "      if (x == '' || x == 'NaN') continue;"
       + "      if (/^-?[0-9]+(\\.[0-9]+)?([eE]-?[0-9]+)?$/.test(x)) cells.push('<c r=\"' + ref + '\"><v>' + x + '</v></c>');"
       + "      else cells.push('<c r=\"' + ref + '\" t=\"inlineStr\"><is><t>' + esc(x) + '</t></is></c>'); }"
       + "    rows.push('<row r=\"' + (r + 1) + '\">' + cells.join('') + '</row>'); }"
       + "  put('xl/worksheets/sheet' + (s + 1) + '.xml', '<?xml version=\"1.0\" encoding=\"UTF-8\"?><worksheet xmlns=\"' + NS + 'spreadsheetml/2006/main\">'"
       + "    + '<sheetViews><sheetView workbookViewId=\"0\"><pane ySplit=\"1\" topLeftCell=\"A2\" activePane=\"bottomLeft\" state=\"frozen\"/></sheetView></sheetViews>'"
       + "    + '<cols><col min=\"1\" max=\"30\" width=\"18\" customWidth=\"1\"/></cols><sheetData>' + rows.join('') + '</sheetData></worksheet>');"
       + "  ct += '<Override PartName=\"/xl/worksheets/sheet' + (s + 1) + '.xml\" ContentType=\"application/vnd.openxmlformats-officedocument.spreadsheetml.worksheet+xml\"/>';"
       + "  wb += '<sheet name=\"' + esc(names[s]) + '\" sheetId=\"' + (s + 1) + '\" r:id=\"rId' + (s + 1) + '\"/>';"
       + "  rel += '<Relationship Id=\"rId' + (s + 1) + '\" Type=\"' + NS + 'officeDocument/2006/relationships/worksheet\" Target=\"worksheets/sheet' + (s + 1) + '.xml\"/>'; }"
       + "put('[Content_Types].xml', '<?xml version=\"1.0\" encoding=\"UTF-8\"?><Types xmlns=\"' + NS + 'package/2006/content-types\">'"
       + "  + '<Default Extension=\"rels\" ContentType=\"application/vnd.openxmlformats-package.relationships+xml\"/><Default Extension=\"xml\" ContentType=\"application/xml\"/>'"
       + "  + '<Override PartName=\"/xl/workbook.xml\" ContentType=\"application/vnd.openxmlformats-officedocument.spreadsheetml.sheet.main+xml\"/>' + ct + '</Types>');"
       + "put('_rels/.rels', '<?xml version=\"1.0\" encoding=\"UTF-8\"?><Relationships xmlns=\"' + NS + 'package/2006/relationships\"><Relationship Id=\"rId1\" Type=\"' + NS + 'officeDocument/2006/relationships/officeDocument\" Target=\"xl/workbook.xml\"/></Relationships>');"
       + "put('xl/workbook.xml', '<?xml version=\"1.0\" encoding=\"UTF-8\"?><workbook xmlns=\"' + NS + 'spreadsheetml/2006/main\" xmlns:r=\"' + NS + 'officeDocument/2006/relationships\"><sheets>' + wb + '</sheets></workbook>');"
       + "put('xl/_rels/workbook.xml.rels', '<?xml version=\"1.0\" encoding=\"UTF-8\"?><Relationships xmlns=\"' + NS + 'package/2006/relationships\">' + rel + '</Relationships>');"
       + "out.close(); ''; } catch (e) { String(e); }";
    err = eval("js", js);
    for (i = 0; i < names.length; i++) { f = tmp + "sheet" + i + ".tsv"; if (File.exists(f)) ok = File.delete(f); }
    return err;
}

// 1-based channel number of a choice "C<n> name", 0 for a "None ..." choice.
function chIndex(choice) {
    if (startsWith(choice, "None")) return 0;
    return parseInt(substring(choice, 1, indexOf(choice, " ")));
}

// Index (0-based) of the first channel whose name matches the regular expression (case-insensitive), else dflt.
function channelLike(names, re, dflt) {
    for (i = 0; i < names.length; i++) if (matches(toLowerCase(names[i]), ".*(" + re + ").*")) return i;
    return dflt;
}

// Opens series s and keeps the given channels (1-based) as 32-bit images or stacks with the given titles
// (calibration kept). Returns "" or the problem.
function loadChannels(path, s, chs, titles) {
    err = openSeries(path, s);
    if (err != "") return "could not be opened (" + shortError(err, path) + ")";
    src = getTitle();
    getDimensions(w, h, c, z, t);
    for (i = 0; i < chs.length; i++) if (c < chs[i]) { close(src); return "has only " + c + " channel(s)"; }
    getPixelSize(unit, pw, ph);
    if (unit == "pixel" || unit == "pixels" || unit == "") { close(src); return "has no pixel size (uncalibrated: set it in Image > Properties and save, or use the original microscope file)"; }
    for (i = 0; i < chs.length; i++) {
        selectWindow(src);
        run("Duplicate...", "title=" + titles[i] + " duplicate channels=" + chs[i]);
        run("32-bit");
    }
    close(src);
    return "";
}

// Max projection of title (a copy when it is a single plane) named newTitle.
function projectTo(title, newTitle) {
    selectWindow(title);
    if (nSlices > 1) run("Z Project...", "projection=[Max Intensity]");
    else run("Duplicate...", " ");
    rename(newTitle);
}

// Sum over the slices of title (32-bit, 2D) named newTitle.
function sumOf(title, newTitle) {
    selectWindow(title);
    if (nSlices > 1) run("Z Project...", "projection=[Sum Slices]");
    else run("Duplicate...", " ");
    rename(newTitle);
}

// Sum over the slices of title1 x title2, named newTitle.
function sumProduct(title1, title2, newTitle) {
    imageCalculator("Multiply create 32-bit stack", title1, title2);
    rename("prod_tmp");
    sumOf("prod_tmp", newTitle);
    close("prod_tmp");
}

// Prepares title (image or stack) for outlining: rolling ball, 1-pixel Gaussian, remaining background
// (median of the pixels below the Otsu threshold, over all slices) subtracted. Returns that background.
function prepare(title, radiusUm) {
    selectWindow(title);
    getPixelSize(unit, pw, ph);
    r = maxOf(2, radiusUm / pw);
    flag = ""; if (nSlices > 1) flag = " stack";
    run("Subtract Background...", "rolling=" + r + flag);
    run("Gaussian Blur...", "sigma=1" + flag);
    setAutoThreshold("Otsu dark stack");
    getThreshold(lo, hi);
    sum = 0; n = 0;
    for (z = 1; z <= nSlices; z++) {
        setSlice(z);
        setThreshold(-1e30, lo);
        run("Create Selection");
        if (selectionType() >= 0) {
            getRawStatistics(nb);
            List.setMeasurements;
            sum += nb * List.getValue("Median"); n += nb;
        }
        run("Select None");
    }
    resetThreshold();
    setSlice(1);
    bg = 0; if (n > 0) bg = sum / n;
    run("Subtract...", "value=" + bg + flag);
    return bg;
}

// Draws the white pixels of mask (single plane) onto the RGB image target in the given colour: their outline,
// or the pixels themselves (fillIt, for a skeleton).
function drawOutline(target, mask, r, g, b, fillIt) {
    selectWindow(mask);
    if (nSlices > 1) return;
    setThreshold(255, 255);
    run("Create Selection");
    resetThreshold();
    if (selectionType() < 0) return;
    selectWindow(target);
    run("Restore Selection");
    setForegroundColor(r, g, b);
    if (fillIt) run("Fill", "slice"); else run("Draw", "slice");
    run("Select None");
    selectWindow(mask);
    run("Select None");
}

function qcBase(cond, rep, name, s, nSeries) {
    base = File.getNameWithoutExtension(name);
    if (endsWith(base, ".ome")) base = substring(base, 0, lengthOf(base) - 4);
    q = cond + "_" + rep + "_" + base;
    q = sanitize(q);
    if (nSeries > 1) q = q + "_S" + (s + 1);
    return q;
}

// Noise of a background-subtracted stack: RMS of its negative voxels (pure noise, since background is 0).
function noiseRms(title) {
    selectWindow(title);
    sq = 0; n = 0;
    for (z = 1; z <= nSlices; z++) {
        setSlice(z);
        setThreshold(-1e30, 0);
        run("Create Selection");
        if (selectionType() >= 0) { getRawStatistics(nb, mean, mn, mx, sd); sq += nb * (sd * sd + mean * mean); n += nb; }
        run("Select None");
    }
    resetThreshold();
    setSlice(1);
    if (n == 0) return 0;
    return sqrt(sq / n);
}

// Selects cell i (0-based) of the label image "cellLabels" (no ROI Manager: it is unreliable in batch mode).
function cellSelect(i) {
    selectWindow("cellLabels");
    setThreshold(i + 1, i + 1);
    run("Create Selection");
    resetThreshold();
}

// Sum of image title inside cell i.
function roiVal(title, i) {
    cellSelect(i);
    selectWindow(title);
    run("Restore Selection");
    getRawStatistics(n, mean);
    run("Select None");
    return n * mean;
}

// [pixel count, sum] of image title inside cell i.
function roiSum(title, i) {
    cellSelect(i);
    selectWindow(title);
    run("Restore Selection");
    getRawStatistics(n, mean);
    run("Select None");
    return newArray(n, n * mean);
}

// Median and SD of image or stack title outside the (2D) binary mask widened by grow pixels, over all slices,
// and the fraction of the field that is outside. Returns [median, SD, fraction].
function outsideStats(title, mask, grow) {
    selectWindow(mask);
    run("Duplicate...", "title=out_tmp");
    run("Maximum...", "radius=" + maxOf(1, round(grow)));
    run("Invert");
    setThreshold(255, 255);
    run("Create Selection");
    resetThreshold();
    frac = 0; med = 0; sd = 0;
    if (selectionType() >= 0) {
        getRawStatistics(nOut);
        frac = nOut / (getWidth() * getHeight());
        selectWindow(title);
        run("Restore Selection");
        sm = 0; ss = 0; k = 0;
        for (z = 1; z <= nSlices; z++) {
            setSlice(z);
            List.setMeasurements;
            sm = sm + List.getValue("Median"); ss = ss + List.getValue("StdDev"); k++;
        }
        med = sm / k; sd = ss / k;
        setSlice(1);
        run("Select None");
    }
    close("out_tmp");
    return newArray(med, sd, frac);
}

// Histogram of the whole stack in nb bins between mn and mx: [bin starts (nb), counts (nb)].
function stackHistogram(nb, mn, mx) {
    vals = newArray(nb); cnt = newArray(nb);
    w = (mx - mn) / nb; if (w <= 0) w = 1;
    for (b = 0; b < nb; b++) vals[b] = mn + b * w;
    for (z = 1; z <= nSlices; z++) {
        setSlice(z);
        getHistogram(v, c, nb, mn, mx);
        for (b = 0; b < nb; b++) cnt[b] = cnt[b] + c[b];
    }
    setSlice(1);
    return Array.concat(vals, cnt);
}

// Cells (2D) of the open image(s): "nuc01" (nuclei 0/1), "nucmask" (when nuclei are used), "cellmask" and
// "cellLabels" (1..n). Each nucleus seeds a cell; the outline channel (smoothed max projection, threshold method)
// gives its extent (ringUm > 0: a ring of that width around each nucleus instead, for cells without a cell-fill
// marker); touching cells are split halfway between nuclei. Returns the number of cells.
function segmentCells(outlineSrc, useNuc, whole, minCell, minNuc, cellMethod, nucMethod, ringUm, pw) {
    selectWindow(outlineSrc); W = getWidth(); H = getHeight();
    newImage("nuc01", "32-bit black", W, H, 1);
    if (useNuc > 0 && !whole) {
        projectTo("nucch", "nucproj");
        run("Gaussian Blur...", "sigma=" + maxOf(1, 0.5 / pw));
        setAutoThreshold(nucMethod + " dark");
        run("Convert to Mask");
        run("Fill Holes");
        run("Analyze Particles...", "size=" + minNuc + "-Infinity show=Masks clear");
        rename("nucmask"); if (is("Inverting LUT")) run("Invert LUT");
        close("nucproj");
        selectWindow("nucmask"); run("Duplicate...", "title=vor_in");
        run("Voronoi");
        rename("lines");
        setThreshold(1, 255); run("Convert to Mask"); run("Maximum...", "radius=1");
        close("vor_in");
        selectWindow("nucmask"); run("Duplicate...", "title=nucbin"); run("32-bit"); run("Divide...", "value=255");
        imageCalculator("Add", "nuc01", "nucbin"); close("nucbin");
    }
    if (whole) {
        newImage("cellmask", "8-bit white", W, H, 1);
    } else if (ringUm > 0 && isOpen("nucmask")) {
        selectWindow("nucmask"); run("Duplicate...", "title=cellmask");
        run("Maximum...", "radius=" + maxOf(1, round(ringUm / pw)));
        if (isOpen("lines")) { imageCalculator("Subtract", "cellmask", "lines"); close("lines"); }
    } else {
        projectTo(outlineSrc, "cellproj");
        run("Gaussian Blur...", "sigma=" + maxOf(1, 1 / pw));
        setAutoThreshold(cellMethod + " dark");
        run("Convert to Mask");
        run("Fill Holes");
        rename("cellmask");
        if (isOpen("lines")) { imageCalculator("Subtract", "cellmask", "lines"); close("lines"); }
    }
    selectWindow("cellmask");
    if (is("Inverting LUT")) run("Invert LUT");
    run("Analyze Particles...", "size=" + minCell + "-Infinity show=[Count Masks] display clear");
    rename("cellLabels");
    n = nResults;
    run("Clear Results");
    return n;
}

// Mean protein per voxel of each cell (sumTitle = background-subtracted sum over nz slices) in units of the
// background noise; NaN when the noise is unknown (whole-field mode).
function cellLevels(sumTitle, nCells, nz, noise) {
    lv = newArray(nCells);
    for (ci = 0; ci < nCells; ci++) {
        cellSelect(ci); selectWindow(sumTitle); run("Restore Selection"); getRawStatistics(n, mean); run("Select None");
        lv[ci] = NaN; if (noise > 0) lv[ci] = mean / nz / noise;
    }
    return lv;
}

// Plugin version: shown by About and written into every results file.
function pluginVersion() { return "1.0.1"; }
